// Macro para procesar todas las imágenes .tif de un directorio 
// y guardar los resultados en carpetas creadas automáticamente según el nombre de la imagen.

// Solicita el directorio de entrada (donde se encuentran las imágenes .tif)
inputDir = getDirectory("Selecciona la carpeta que contiene las imágenes (.tif)");

// Solicita el directorio base de salida
baseOutput = getDirectory("Selecciona la carpeta base para guardar los resultados");

// Obtiene la lista de archivos del directorio de entrada
list = getFileList(inputDir);

for (i = 0; i < list.length; i++) {
    file = list[i];
    // Procesa solo imágenes .tif
    if (endsWith(file, ".tif") || endsWith(file, ".TIF")) {
        // Abre la imagen
        open(inputDir + file);
        
        // Obtener nombre de la imagen y quitar extensión
        imageTitle = getTitle();
        dotIndex = indexOf(imageTitle, ".");
        if (dotIndex != -1) {
            baseName = substring(imageTitle, 0, dotIndex);
        } else {
            baseName = imageTitle;
        }
        
         // --- AQUI: aplicar blur solo si el nombre contiene ciertas palabras ---
        if (indexOf(baseName, "_raw") != -1 || indexOf(baseName, "_RL20") != -1 || indexOf(baseName, "_GT") != -1) {
            // Ajusta los valores x,y,z si lo deseas
            run("Gaussian Blur 3D...", "x=0.8 y=0.8 z=0.8");
        }
       // ---------------------------------------------------------------------
        
        // Crear carpeta para esta imagen y sus subcarpetas
        folderBase = baseOutput + baseName + "/";
        File.makeDirectory(folderBase);
        File.makeDirectory(folderBase + "Lateral");
        File.makeDirectory(folderBase + "Axial");
        
        outputxy = folderBase + "Lateral/";
        outputxz = folderBase + "Axial/";
        
        // --- Procesamiento de líneas XY ---
        // Definir las coordenadas de las líneas (slice, x1, y1, x2, y2)
        lines = newArray(
        	
        	149, 1114, 0, 1114, 12,
        	72, 229, 6, 229, 25,
        	164, 1188, 17, 1188, 30,
        	128, 691, 25, 691, 40,
        	100, 154, 33, 154, 62,	//5
        	34, 1159, 48, 1159, 68,
        	112, 1178, 53, 1178, 72,
        	48, 1038, 52, 1038, 73,
        	155, 1084, 29, 1104, 29,
        	42, 1196, 92, 1196, 118,	//10
        	61, 711, 65, 711, 92,
        	212, 206, 105, 206, 121,
        	120, 925, 134, 925, 149,
        	120, 967, 148, 967, 167,
        	65, 142, 161, 142, 179,		//15
        	120, 1063, 171, 1063, 192,
        	221, 518, 183, 518, 201,
			35, 861, 190, 861, 213,
			43, 1304, 208, 1304, 226,
			110, 1441, 251, 1441, 268,	//20
			66, 251, 255, 251, 272,
			32, 978, 271, 978, 292,
			163, 1019, 386, 1019, 401,
			130, 1202, 393, 1202, 409,
			176, 967, 413, 967, 428		//25


 
                                 
        );
        
        // Procesa cada línea y guarda los resultados en la carpeta "Lateral"
        for (j = 0; j < lengthOf(lines); j += 5) {
            slice = lines[j];
            x1 = lines[j + 1]; y1 = lines[j + 2];
            x2 = lines[j + 3]; y2 = lines[j + 4];
        
            setSlice(slice);
            makeLine(x1, y1, x2, y2);
            run("Plot Profile");
            Plot.getValues(xpoints, ypoints);
            
            Table.create("Results");
            Table.setColumn("X", xpoints);
            Table.setColumn("Y", ypoints);
            Table.update;
        
            // Guardar archivo CSV en Lateral
            Table.save(outputxy + "Result_XY_" + (j/5 + 1) + ".csv");
            close(); // Cierra la tabla
        }
        
        // --- Procesamiento de líneas XZ ---
        // Vuelve a la imagen original y realiza un reslice
        selectImage(imageTitle);
        run("Select None");
        run("Reslice [/]...", "output=1.000 start=Top avoid");
        
        // Coordenadas de las líneas XZ (slice, x1, y1, x2, y2)
        lines_xz = newArray(   
        	7, 1112, 116, 1112, 182,
        	16, 229, 43, 229, 97,
        	26, 1186, 138, 1186, 189,
        	35, 693, 99, 693, 155,
        	49, 154, 70, 154, 129,	//5
        	59, 1160, 9, 1160, 56,
        	63, 1178, 85, 1178, 136,
        	65, 1038, 22, 1038, 73,
        	77, 1066, 127, 1066, 182,
        	106, 1195, 11, 1195, 69,	//10
        	80, 711, 33, 711, 90,
        	114, 207, 185, 207, 239,
        	143, 927, 96, 927, 141,
        	159, 966, 92, 966, 145,
        	171, 142, 36, 142, 93,	//15
        	183, 1062, 91, 1062, 146,
        	193, 517, 191, 517, 250,
        	203, 862, 8, 862, 58,
        	219, 1304, 18, 1304, 67,
        	261, 1440, 88, 1440, 133,	//20
        	266, 253, 47, 253, 86,
        	282, 979, 5, 979, 61,
        	395, 1019, 134, 1019, 191,
        	402, 1202, 97, 1202, 160,
        	422, 967, 156, 967, 198		//25
        	

		
        );
        
        // Procesa cada línea y guarda los resultados en la carpeta "Axial"
        for (j = 0; j < lengthOf(lines_xz); j += 5) {
            slice = lines_xz[j];
            x1 = lines_xz[j + 1]; y1 = lines_xz[j + 2];
            x2 = lines_xz[j + 3]; y2 = lines_xz[j + 4];
        
            setSlice(slice);
            makeLine(x1, y1, x2, y2);
            run("Plot Profile");
            Plot.getValues(xpoints, ypoints);
            
            Table.create("Results");
            Table.setColumn("X", xpoints);
            Table.setColumn("Y", ypoints);
            Table.update;
        
            // Guardar archivo CSV en Axial
            Table.save(outputxz + "Result_XZ_" + (j/5 + 1) + ".csv");
            close(); // Cierra la tabla
        }
        
        // Cierra la imagen procesada
        close();
        close();
    }
}

print("Procesamiento completado para todas las imágenes.");
